PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = exam_trainer
  keyboardBackend = ioHub
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Routines
  Routine welcome_screen
    TextComponent text_welcome_sreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for participating in this study. It has three parts. Part one begins soon.
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    KeyboardComponent welcome_key
      allowedKeys = "t"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank_500
    TextComponent text_blank_500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine instructions_vignette
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        condition = np.random.choice(('dutch','english'))
    TextComponent text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.04
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text = $"You will see a series of sentences in " +condition +".\nImagine yourself as a witness to the actions in each one.\nPlease rate how MORALLY WRONG each action was, using a 4-point scale ranging from: "
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = ("1\nNot Morally Wrong", "4\nExtremely Morally Wrong")
      letterHeight = 0.03
      pos = (0, -.05)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4)
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    KeyboardComponent key_resp
      allowedKeys = 'b', 'y', 'g', 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.035
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Please use your right hand for the ratings. Your index finger equals one, your pinky the four.
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  Routine instructions_SMID
    TextComponent text_SMID
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Thank you for answering the questions on the vignettes. The first part of the study is done.

        Next, we will present images. Please indicate whether these are moral, neutral or immoral.
    KeyboardComponent key_end
      allowedKeys = "b", "y", "g", "r"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine pic_stimulus
    ImageComponent smid_image
      image [set every repeat] = $image_name
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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  Routine vignette_stimulus
    TextComponent test_question
      letterHeight = 0.04
      pos = (0, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $vignette_text
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    SliderComponent rating_vignettes
      forceEndRoutine = False
      granularity = 0
      labels = ("1\nNot Morally Wrong", "4\nExtremely Morally Wrong")
      letterHeight = 0.03
      pos = (0, -.05)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      styles = rating
      ticks = (1, 2, 3, 4)
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    KeyboardComponent key_question
      allowedKeys = "b", "y", "g", "r"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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  Routine Rating
    SliderComponent rating_smid
      forceEndRoutine = False
      granularity = 0
      labels = ("1\nMoral", "5\nImmoral")
      letterHeight = 0.03
      pos = (0, -.05)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent rating_key_smid
      allowedKeys = "b", "y", "g", "r"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent text_smd
      letterHeight = 0.04
      pos = (0, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = The image portrayed something...
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  Routine fixation_cross_long
    PolygonComponent cross_long
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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  Routine fixation_cross_short
    PolygonComponent cross_short
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine blank_rnd
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        blank_duration = np.random.uniform(1,3)
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $blank_duration
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  Routine vignette_break
    CodeComponent vignette_pauses
      Code Type = Auto->JS
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      Each Frame:
        if vignette_trials.thisN == 0 or (vignette_trials.thisN + 1) % 4 != 0:
            continueRoutine = False
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Short Break. When you are ready to continue, indicate that with pressing any key
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    KeyboardComponent key_resp_2
      allowedKeys = "b", "y", "g", "r"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine image_break
    CodeComponent image_break_code
      Code Type = Auto->JS
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      Each Frame:
        if image_trials.thisN == 0 or (image_trials.thisN + 1) % 3 != 0:
            continueRoutine = False
    TextComponent image_break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Short Break. When you are ready to continue, indicate that with pressing any key
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    KeyboardComponent image_break_resp
      allowedKeys = "b", "y", "g", "r"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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Flow
  Routine welcome_screen
  Routine blank_500
  Routine instructions_vignette
  Routine blank_500
  LoopInitiator vignette_trials loopType="TrialHandler"
    Selected rows = $random(12)*120
    conditionsFile = $"vig_text_"+ condition + ".xlsx"
    loopType = random
    nReps = 1
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    Routine vignette_stimulus
    Routine blank_rnd
    Routine vignette_break
  LoopTerminator vignette_trials
  Routine instructions_SMID
  Routine blank_500
  LoopInitiator image_trials loopType="TrialHandler"
    Selected rows = $random(12)*120
    conditionsFile = smid_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_id': 0, 'image_name': 'smid/Neutral_Immoral - high arousal4.jpg', 'moral_domain': 'Neutral', 'valence': 'Immoral', 'arousal': 'high arousal', 'image_number': 4},
      {'image_id': 1, 'image_name': 'smid/Purity-Degradation_Moral - low arousal4.jpg', 'moral_domain': 'Purity-Degradation', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 4},
      {'image_id': 2, 'image_name': 'smid/Loyalty-Betrayal_Moral - low arousal1.jpg', 'moral_domain': 'Loyalty-Betrayal', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 1},
      {'image_id': 3, 'image_name': 'smid/Neutral_Moral - low arousal1.jpg', 'moral_domain': 'Neutral', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 1},
      {'image_id': 4, 'image_name': 'smid/Purity-Degradation_Moral - low arousal5.jpg', 'moral_domain': 'Purity-Degradation', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 5},
      {'image_id': 5, 'image_name': 'smid/Neutral_Immoral - high arousal5.jpg', 'moral_domain': 'Neutral', 'valence': 'Immoral', 'arousal': 'high arousal', 'image_number': 5},
      {'image_id': 6, 'image_name': 'smid/Authority-Subversion_Moral - low arousal5.jpg', 'moral_domain': 'Authority-Subversion', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 5},
      {'image_id': 7, 'image_name': 'smid/Loyalty-Betrayal_Moral - low arousal2.jpg', 'moral_domain': 'Loyalty-Betrayal', 'valence': 'Moral', 'arousal': 'low arousal', 'image_number': 2}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
    Routine fixation_cross_long
    Routine pic_stimulus
    Routine fixation_cross_short
    Routine Rating
    Routine image_break
  LoopTerminator image_trials
  Routine blank_500
